 <CompuCell3D>
 
 <PythonScript>Demos/BionetSolverExamples/MultiscaleSimulation/MultiscaleSimulation_Main.py</PythonScript>
 
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

<Plugin Name="NeighborTracker"/>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="CellTypeA" TypeId="1"/>
    <CellType TypeName="CellTypeB" TypeId="2"/>
 </Plugin>
 
<Plugin Name="VolumeLocalFlex"/>

<Plugin Name="Surface">
<TargetSurface>20</TargetSurface>
<LambdaSurface>1.5</LambdaSurface>
</Plugin>

 <Plugin Name="Contact">
    <Energy Type1="Medium" Type2="Medium">10.0</Energy>
    <Energy Type1="Medium" Type2="CellTypeA">10.0</Energy>
    <Energy Type1="Medium" Type2="CellTypeB">10.0</Energy>
    <Energy Type1="CellTypeA" Type2="CellTypeA">-10.0</Energy>
    <Energy Type1="CellTypeA" Type2="CellTypeB">-10.0</Energy>
    <Energy Type1="CellTypeB" Type2="CellTypeB">-10.0</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Steppable Type="BlobInitializer">
   <Gap>0</Gap>
   <Width>5</Width>
   <CellSortInit>yes</CellSortInit>   
   <Radius>10</Radius>
 </Steppable>

</CompuCell3D>





