 <CompuCell3D>
 
 <PythonScript>Demos/BionetSolverExamples/TestCellDeath/TestCellDeath_Main.py</PythonScript>
 
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>1000</Steps>
   <Temperature>25</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

<Plugin Name="NeighborTracker"/>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="HighDelta" TypeId="1"/>
    <CellType TypeName="LowDelta" TypeId="2"/>
 </Plugin>
 
 <Plugin Name="VolumeLocalFlex"/>

<!--<Plugin Name="Surface">
<TargetSurface>30.0</TargetSurface>
<LambdaSurface>2.0</LambdaSurface>
</Plugin>-->

<Plugin Name="SurfaceLocalFlex"/>

 <Plugin Name="Contact">
    <Energy Type1="Medium" Type2="Medium">10.0</Energy>
    <Energy Type1="Medium" Type2="LowDelta">10.0</Energy>
    <Energy Type1="Medium" Type2="HighDelta">10.0</Energy>
    <Energy Type1="LowDelta" Type2="LowDelta">-10.0</Energy>
    <Energy Type1="LowDelta" Type2="HighDelta">-10.0</Energy>
    <Energy Type1="HighDelta" Type2="HighDelta">-10.0</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

<!--
<Steppable Type="BlobInitializer">
   <Gap>0</Gap>
   <Width>8</Width>
   <CellSortInit>yes</CellSortInit>   
   <Radius>20</Radius>
 </Steppable>
-->

 <Steppable Type="UniformInitializer">
   <Region>
     <BoxMin x="47" y="47" z="0"/>
     <BoxMax x="54" y="54" z="1"/>
     <Gap>0</Gap>
     <Width>7</Width>
     <Types>LowDelta, HighDelta</Types>
   </Region>
 </Steppable>

</CompuCell3D>





