<CompuCell3D Revision="20190604" Version="4.0.0">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>A,B</Types>
      </Region>
   </Steppable>
   
   <Steppable Type="HeterotypicBoundaryLength"/>
   
</CompuCell3D>
