 <CompuCell3D>
 
 
 <Potts>
   <Dimensions x="200" y="200" z="1"/>
   <Steps>1500</Steps>
   <Temperature>25</Temperature>
 </Potts>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Blue" TypeId="1"/>
    <CellType TypeName="Green" TypeId="2"/>
 </Plugin>
 
<Plugin Name="VolumeLocalFlex"/>

<Plugin Name="SurfaceLocalFlex"/>

<Plugin Name="PixelTracker"/>

 <Plugin Name="Contact">
    <Energy Type1="Medium" Type2="Medium"> 30.0  </Energy>
    <Energy Type1="Medium" Type2="Blue">  -10.0  </Energy>
    <Energy Type1="Medium" Type2="Green">   0.0  </Energy>
    <Energy Type1="Blue" Type2="Blue">    -30.0  </Energy>
    <Energy Type1="Blue" Type2="Green">    10.0  </Energy>
    <Energy Type1="Green" Type2="Green">  -10.0  </Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

<Steppable Type="BlobInitializer">   
   <Region>
      <Center x="100" y="100" z="0"/>
      <Radius>40</Radius>
      <Gap>0</Gap>
      <Width>8</Width>
      <Types>Blue,Green</Types>
   </Region>
</Steppable> 

</CompuCell3D>





