<!-- This is the base simulation to calibrate the chemotaxis Lagrange multiplier -->
<!-- such that for a given set of simulation parameters, a cell moves 100 pixels -->
<!-- over 1000 MCS due to a linear concentration field in [0, 1] -->
<CompuCell3D Revision="20200118" Version="4.1.1">
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>0</DebugOutputFrequency>
   </Metadata>

   <Potts>
      <Dimensions x="200" y="50" z="1"/>
      <Steps>1000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>

   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
   </Plugin>

   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>

   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Type1">10.0</Energy>
      <Energy Type1="Type1" Type2="Type1">10.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>

   <Plugin Name="Chemotaxis">
      <ChemicalField Name="Field1">
         <ChemotaxisByType ChemotactTowards="Medium" Lambda="0" Type="Type1"/>
      </ChemicalField>
   </Plugin>

   <Plugin Name="CenterOfMass"/>

   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="Field1">
         <DiffusionData>
            <FieldName>Field1</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <InitialConcentrationExpression>(x-50)/100</InitialConcentrationExpression>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="-0.5"/>
               <ConstantValue PlanePosition="Max" Value="1.5"/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
</CompuCell3D>