 <CompuCell3D>
 <Potts>
   <Dimensions x="50" y="50" z="50"/>
   <Anneal>0</Anneal>
   <Steps>10000</Steps>
   <Temperature>20</Temperature>
   <Flip2DimRatio>1.0</Flip2DimRatio>

   <RandomSeed>1</RandomSeed>
 </Potts>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Bacterium" TypeId="1" />
    <CellType TypeName="Macrophage" TypeId="2" Freeze=""/>    
    <CellType TypeName="Wall" TypeId="3" Freeze=""/>    
 </Plugin>

 <Plugin Name="PixelTracker"/>

 <Plugin Name="Volume">
   <TargetVolume>125</TargetVolume>
   <LambdaVolume>15.0</LambdaVolume>
 </Plugin>


 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Macrophage" Type2="Macrophage">15</Energy>
   <Energy Type1="Macrophage" Type2="Medium">8</Energy>
   <Energy Type1="Bacterium" Type2="Bacterium">15</Energy>
   <Energy Type1="Bacterium" Type2="Macrophage">15</Energy>
   <Energy Type1="Bacterium" Type2="Medium">8</Energy>
   <Energy Type1="Wall" Type2="Wall">0</Energy>
   <Energy Type1="Wall" Type2="Medium">0</Energy>
   <Energy Type1="Wall" Type2="Bacterium">50</Energy>
   <Energy Type1="Wall" Type2="Macrophage">50</Energy>
   <Depth>2</Depth>
 </Plugin>

<Plugin Name="CenterOfMass"/>


 <Steppable Type="UniformInitializer">
   
   <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
      <BoxMin x="20" y="20" z="20"/>
      <BoxMax x="25" y="25" z="25"/>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Macrophage,Bacterium</Types>
   </Region>
</Steppable>


</CompuCell3D>
