 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>
 
 <Plugin Name="TemplatePlugin">
 	<TemplateString>Depressed</TemplateString>
 	<TemplateStrings>Happy,Sad,Sadder</TemplateStrings>
 	
 	<TemplateEnergy Type1="alpha" Type2="alpha">16</TemplateEnergy>
   	<TemplateEnergy Type1="alpha"    Type2="gamma">2</TemplateEnergy>
   	<TemplateEnergy Type1="beta" 	Type2="beta">11</TemplateEnergy>
   	
    <TemplateType TypeName="delta" TypeId="31"/>
    <TemplateType TypeName="psi" TypeId="41"/>
    <TemplateType TypeName="omega" TypeId="59"/>

	<TemplateChemicalField Source="DiffusionSolverFE" Name="FGF">                                                                                                                                       
        <TemplateChemotaxisByType Type="Amoeba" Lambda="0"/>                                                                                                                                                   
        <TemplateChemotaxisByType Type="Bacteria" Lambda="2000000" SaturationCoef="1"/>                                                                                                                        
   </TemplateChemicalField>    

 </Plugin>
 
  <Steppable Type="DiffusionSolverFE">
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
	    <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
<!--            <DeltaT>0.1</DeltaT> -->
<!--            <DeltaX>1.0</DeltaX> -->
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>

<Steppable Type="BlobInitializer">   
   <Region>
      <Center x="50" y="50" z="0"/>
      <Radius>40</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Condensing,NonCondensing</Types>
   </Region>
</Steppable>

</CompuCell3D>
