<CompuCell3D>
    <Potts>
        <Dimensions x="100" y="100" z="1"/>
        <Anneal>10</Anneal>
        <Steps>10000</Steps>
        <Temperature>10</Temperature>
        <Flip2DimRatio>1</Flip2DimRatio>
        <NeighborOrder>2</NeighborOrder>
        <!--        <LatticeType>Hexagonal</LatticeType>-->
    </Potts>

    <Plugin Name="Volume">
        <TargetVolume>25</TargetVolume>
        <LambdaVolume>2.0</LambdaVolume>
    </Plugin>

    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Condensing" TypeId="1"/>
        <CellType TypeName="NonCondensing" TypeId="2"/>
    </Plugin>

    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">0</Energy>
        <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
        <Energy Type1="Condensing" Type2="Condensing">2</Energy>
        <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
        <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
        <Energy Type1="Condensing" Type2="Medium">16</Energy>
        <NeighborOrder>2</NeighborOrder>
    </Plugin>

    <Plugin Name="CenterOfMass"/>

    <Plugin Name="VectorFieldPolarization">
        <Field Name="Fibers"/>
        <PolarizationLambda>2.0</PolarizationLambda>
    </Plugin>


    <Steppable Type="FieldManager">
        <Field Name="fibers_field_manager" Type="vector"/>
        <Field Name="numpy_field_manager" Type="scalar"/>
        <Field Name="cell_type_field" Type="scalar" Precision="uchar"/>
        <Field Name="cell_volume_field" Type="scalar" Precision="int"/>
    </Steppable>


    <!--    <Steppable Type="FieldManager">-->
    <!--        <Field Name="fibers_field_manager" Type="vector"/>-->
    <!--        <Field Name="numpy_field_manager" Type="scalar"/>-->
    <!--        <Field Name="cell_type_field" Type="scalar_uchar"/>-->
    <!--        <Field Name="cell_volume_field" Type="scalar_int"/>-->

    <!--    </Steppable>-->


    <Steppable Type="DiffusionSolverFE">
        <DiffusionField>
            <DiffusionData>
                <FieldName>FGF</FieldName>
                <DiffusionConstant id="fgf_diff_constant">0.010</DiffusionConstant>
                <DecayConstant id="fgf_decay_constant">0.000</DecayConstant>
                <!--DoNotDecayIn>Medium</DoNotDecayIn-->
                <!--            <DeltaT>0.1</DeltaT> -->
                <!--            <DeltaX>1.0</DeltaX> -->
                <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
            </DiffusionData>
        </DiffusionField>
    </Steppable>

    <Steppable Type="BlobInitializer">
        <Region>
            <Center x="50" y="50" z="0"/>
            <Radius>40</Radius>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Condensing,NonCondensing</Types>
        </Region>
    </Steppable>

</CompuCell3D>
