<CompuCell3D version="3.6.2">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Condensing"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Condensing">16.0</Energy>
      <Energy Type1="Condensing" Type2="Condensing">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
    <Plugin Name="ContactOrientation">   
        <AngularTerm>
            <Variable Name="LambdaExtra" Value="1.0"/>
            <Expression>Alpha*abs(cos(Theta))</Expression>
        </AngularTerm>
    </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="50" y="50" z="0"/>
         <Radius>20</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Condensing</Types>
      </Region>
   </Steppable>
</CompuCell3D>
