<CompuCell3D Revision="20190906" Version="4.1.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>

   <!--Steppable Type="CustomCellAttributeSteppable"/-->

   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>A,B</Types>
      </Region>
   </Steppable>
</CompuCell3D>