 <CompuCell3D>
 
 <PythonScript>Simulation/FocalPointPlasticity.py</PythonScript>
 
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

  <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">33</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   
 </Plugin>

 
  <Plugin Name="FocalPointPlasticity">
     <Local/> <!-- This switches on local calculations and allows all parameters to be modified individually (using Python) on cell by cell basis -->
              <!-- If you do not include this tag parameters will be set on type by type basis -->
              
      <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level-->
     <Parameters Type1="Condensing" Type2="NonCondensing">
       <Lambda>10.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>
       <MaxNumberOfJunctions>2</MaxNumberOfJunctions>               
    </Parameters>  

    <Parameters Type1="Condensing" Type2="Condensing">
       <Lambda>10.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance> 
       <MaxNumberOfJunctions>2</MaxNumberOfJunctions>        
    </Parameters>
    
 </Plugin> 
 
 <Plugin Name="ExternalPotential">
   	<ExternalPotentialParameters CellType="NonCondensing" x="-10" y="0" z="0"/>
 </Plugin>

 
<!--  <Plugin Name="Connectivity">
   <Penalty>10000000</Penalty>
 </Plugin> -->
 
 <Steppable Type="PIFInitializer">
   <PIFName>Simulation/FocalPointInit.piff</PIFName>
 </Steppable>
 
</CompuCell3D>
