 <CompuCell3D>
 <PythonScript>Simulation/FocalPointPlasticityCompartments.py</PythonScript>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Top" TypeId="1"/>
    <CellType TypeName="Center" TypeId="2"/>
    <CellType TypeName="Bottom" TypeId="3"/>
 </Plugin>

  <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Top" Type2="Top">33</Energy>
   <Energy Type1="Top"    Type2="Center">33</Energy>
   <Energy Type1="Top" Type2="Bottom">33</Energy>   
   <Energy Type1="Center" Type2="Center">33</Energy>
   <Energy Type1="Center" Type2="Bottom">33</Energy>
   <Energy Type1="Bottom" Type2="Bottom">33</Energy>
   <Energy Type1="Top"    Type2="Medium">16</Energy>
   <Energy Type1="Center"    Type2="Medium">16</Energy>
   <Energy Type1="Bottom"    Type2="Medium">16</Energy>   
 </Plugin>

  <Plugin Name="FocalPointPlasticity">
    <Local/> <!-- This switches on local calculations and allows all parameters to be modified individually (using Python) on cell by cell basis -->
              <!-- If you do not include this tag parameters will be set on type by type basis -->
              
     <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level-->              
    <Parameters Type1="Top" Type2="Top">
       <Lambda>10.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>
       <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>       
    </Parameters>  

    <Parameters Type1="Bottom" Type2="Bottom">
       <Lambda>10.0</Lambda>       
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>
       <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>              
    </Parameters>
 
    <InternalParameters Type1="Top" Type2="Center">
       <Lambda>11.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>
       <MaxNumberOfJunctions>1</MaxNumberOfJunctions>        
    </InternalParameters> 

    <InternalParameters Type1="Bottom" Type2="Center">
       <Lambda>11.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>       
       <MaxNumberOfJunctions>1</MaxNumberOfJunctions>
    </InternalParameters> 
    
    <NeighborOrder>1</NeighborOrder>
    
 </Plugin> 
  
    <Plugin Name="ExternalPotential">
   	   <ExternalPotentialParameters CellType="Top" x="0" y="-10" z="0"/>
    </Plugin> 

 
<!--  <Plugin Name="Connectivity">
   <Penalty>10000000</Penalty>
 </Plugin> -->
 
 <Steppable Type="PIFInitializer">
   <PIFName>Simulation/plasticityCompartments.piff</PIFName>
 </Steppable>
 
<!--  <Steppable Type="UniformInitializer">
  <Region>
     <BoxMin x="45" y="45" z="0"/>
     <BoxMax x="55" y="55" z="1"/>
     <Gap>3</Gap>
     <Width>5</Width>
     <Types>Condensing</Types>
  </Region>   
 </Steppable>
 -->
</CompuCell3D>
