 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

  <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">33</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   
 </Plugin>

 
  <Plugin Name="FocalPointPlasticity">
  
     <Parameters Type1="Condensing" Type2="NonCondensing">
       <Lambda>10.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance>
       <MaxNumberOfJunctions>2</MaxNumberOfJunctions>               
    </Parameters>  

    <Parameters Type1="Condensing" Type2="Condensing">
       <Lambda>10.0</Lambda>
       <ActivationEnergy>-50.0</ActivationEnergy>       
       <TargetDistance>7</TargetDistance>
       <MaxDistance>20.0</MaxDistance> 
       <MaxNumberOfJunctions>2</MaxNumberOfJunctions>        
    </Parameters>

    <LinkConstituentLaw>
        <!-- The following variables lare defined by default: Lambda,Length,TargetLength  -->
        <Variable Name="LambdaExtra" Value="1.0"/>        
        <Expression>LambdaExtra*Lambda*(Length-TargetLength)^2</Expression>        
    </LinkConstituentLaw>
    
    
 </Plugin> 
 
    <Plugin Name="ExternalPotential">
   	<ExternalPotentialParameters CellType="NonCondensing" x="-10" y="0" z="0"/>
    </Plugin>

 
<!--  <Plugin Name="Connectivity">
   <Penalty>10000000</Penalty>
 </Plugin> -->
 
 <Steppable Type="PIFInitializer">
   <PIFName>Simulation/FocalPointPlasticityCustom.piff</PIFName>
 </Steppable>
 
</CompuCell3D>
