<CompuCell3D version="3.6.0">
   
   <!-- Basic properties of CPM (GGH) algorithm -->
   <Potts>
      <Dimensions x="128" y="128" z="1"/>
      <Steps>1800</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <!-- Listing all cell types in the simulation -->
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="SecretingCells"/>
      <CellType TypeId="2" TypeName="NonSecretingCells"/>

   </Plugin>
   
   <!-- Constraint on cell volume. Each cell type has different constraint. -->
   <!-- For more flexible specification of the constraint (done in Python) please use VolumeLocalFlex plugin -->
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="SecretingCells" LambdaVolume="0.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="NonSecretingCells" LambdaVolume="0.0" TargetVolume="25"/>
   </Plugin>
   
   
   <!-- Module tracking center of mass of each cell -->
   <Plugin Name="CenterOfMass"/>
   
   <!-- Specification of adhesion energies -->
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10</Energy>
      <Energy Type1="Medium" Type2="SecretingCells">10</Energy>
      <Energy Type1="Medium" Type2="NonSecretingCells">10</Energy>
      <Energy Type1="SecretingCells" Type2="SecretingCells">10</Energy>
      <Energy Type1="SecretingCells" Type2="NonSecretingCells">10</Energy>
      <Energy Type1="NonSecretingCells" Type2="NonSecretingCells">10</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>  
     
     
   <!-- Specification of PDE solvers -->
   <!-- <Steppable Type="ReactionDiffusionSolverFE"> -->
   <!-- Can be used as a plain diffusion solver if additional terms are not
	specified. Regular implicit linear solver is used in this case. -->
   <Steppable Type="ReactionDiffusionSolverFE_OpenCL_Implicit">
   
	   <!-- individual per-field parameters won't be used -->	
	   <DeltaT>0.6</DeltaT>
	   <!-- <DeltaX>1.0<DeltaX> -->
	   
	   <!-- These optional paramsetes could be used to tune the solver -->
	   
	   <!-- Tuning parameters for linear solver (or the linear part of the solver): -->
	   <!-- <MaxLinearIterations>400</MaxLinearIterations> -->
	   <!-- <LinearSolverTolerance>1e-8</LinearSolverTolerance> -->
	   <!-- <StopIfLinearSolverHasNotConverged>false</StopIfLinearSolverHasNotConverged> -->
	
		<!-- Tuning parameters for nolinear Newton iteartions,
		Names for tolerances are taken from 
		"NITSOL: A NEWTON ITERATIVE SOLVER FOR NONLINEAR SYSTEMS" by
		MICHAEL PERNICE AND HOMER F. WALKER -->	
		<!-- <MaxNewtonIterations>400</MaxNewtonIterations> -->
		<!-- <NewtonFTolerance>1e-6</NewtonFTolerance> -->
		<!-- <NewtonSTPTolerance>1e-6</NewtonSTPTolerance> -->
		<!-- <StopNewtonIfToleranceGrows>false</StopNewtonIfToleranceGrows> -->
	   
	   <DiffusionField>            
		   <DiffusionData>   
			  <FieldName>u</FieldName> 
			  <DiffusionConstant>0.01</DiffusionConstant>
			  <!-- In AdditionalTerm a one-line expression can be used 
			  or a C-style body function, where all fields passed as parameters. Branching is allowed too. -->
			  <AdditionalTerm>1.0*u-u*u*u-0.1-0.01*v</AdditionalTerm> 
			</DiffusionData> 
			<SecretionData>
				<Secretion Type="SecretingCells">0.4</Secretion>
			</SecretionData>
	   </DiffusionField>   
	   <DiffusionField>   
			<DiffusionData>
				<FieldName>v</FieldName>
				<DiffusionConstant>0.1</DiffusionConstant>
				<AdditionalTerm>.7*u-.005*v</AdditionalTerm>
			</DiffusionData>
			<SecretionData>
				<Secretion Type="NonSecretingCells">0.7</Secretion>
			</SecretionData> 
		</DiffusionField>    
   </Steppable>

   
   <!-- Initial layout of cells in the form of rectangular slab -->
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="2" y="2" z="0"/>
         <BoxMax x="126" y="126" z="1"/>
         <Gap>1</Gap>
         <Width>1</Width>
         <Types>SecretingCells,NonSecretingCells</Types>
      </Region>
   </Steppable>
</CompuCell3D>
