 <CompuCell3D>
 <PythonScript>Simulation/MomentOfInertia.py</PythonScript>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

 <Plugin Name="VolumeTracker"/>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1" Freeze=""/>    
 </Plugin>
 
 <Plugin Name="CenterOfMass"/>
 
 <Plugin Name="MomentOfInertia"/>

  
</CompuCell3D>

 <!-- <CompuCell3D>
 <PythonScript>Simulation/MomentOfInertia.py</PythonScript>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>10000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1" Freeze=""/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

  <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">33</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">33</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   
 </Plugin>

 
 <Plugin Name="MomentOfInertia"/>

  
</CompuCell3D>
 -->