<CompuCell3D Revision="20200821" Version="4.2.3">

   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>1000</DebugOutputFrequency>
   </Metadata>

   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>

   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="T1"/>
      <CellType TypeId="2" TypeName="T2"/>
   </Plugin>

   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="T1" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="T2" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>

   <Plugin Name="CenterOfMass"/>

   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="T1">5.0</Energy>
      <Energy Type1="Medium" Type2="T2">5.0</Energy>
      <Energy Type1="T1" Type2="T1">20.0</Energy>
      <Energy Type1="T1" Type2="T2">15.0</Energy>
      <Energy Type1="T2" Type2="T2">20.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>

   <Plugin Name="FocalPointPlasticity">
      <Local/>

      <Parameters Type1="T1" Type2="T1">
         <Lambda>10</Lambda>
         <ActivationEnergy>500</ActivationEnergy>
         <TargetDistance>5</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>

      <Parameters Type1="T1" Type2="T2">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>5</TargetDistance>
         <MaxDistance>10</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
      </Parameters>

      <Parameters Type1="T2" Type2="T2">
         <Lambda>10</Lambda>
         <ActivationEnergy>500</ActivationEnergy>
         <TargetDistance>5</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>

      <NeighborOrder>1</NeighborOrder>
   </Plugin>

   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="30" y="30" z="0"/>
         <BoxMax x="70" y="70" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>T1,T2</Types>
      </Region>
   </Steppable>

</CompuCell3D>
