<CompuCell3D Revision="20190906" Version="4.1.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
    <Plugin Name="Volume">
        <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
    </Plugin>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Type1">10.0</Energy>
      <Energy Type1="Type1" Type2="Type1">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="FocalPointPlasticity">
      <Local/>
      <Parameters Type1="Type1" Type2="Type1">
         <Lambda>10</Lambda>
         <ActivationEnergy>-100</ActivationEnergy>
         <TargetDistance>30</TargetDistance>
         <MaxDistance>100</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">5</MaxNumberOfJunctions>
      </Parameters>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      <Region>
         <Center x="50" y="50" z="0"/>
         <Radius>20</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
