 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="100"/>
   <Steps>100</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="red" TypeId="1"/>
    <CellType TypeName="blue" TypeId="2"/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="red"    Type2="Medium">16</Energy>   
   <Energy Type1="blue"    Type2="Medium">16</Energy>
   <Energy Type1="blue"    Type2="blue">2</Energy>
   <Energy Type1="blue"    Type2="red">10</Energy>   
   <Energy Type1="red"    Type2="red">2</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Steppable Type="RandomBlobInitializer">
	<!-- types of cells to initializer -->
	<types>red,blue</types>
	<!-- neighborhood order of the eden growth algorithm -->
	<order>2</order>
	<!-- number of growth steps of the eden growth algorithm -->
	<growsteps>10</growsteps>	
	<!-- set percentage of red and blue cells -->
	<!-- values are given in the order of types -->
	<bias>0.4,0.6</bias>
	<!-- number of cells -->
	<ndiv>8</ndiv>
	<!-- show stats about created cells on command line -->
	<showStats/>
	<!-- add border cell (should also be defined in CellType!!) -->
	<!-- borderType>border<borderType -->	
 </Steppable>

</CompuCell3D>
