 <CompuCell3D>
 <PythonScript>Simulation/PolarizationOrientationExample.py</PythonScript> 
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>   
   <Boundary_x>Periodic</Boundary_x>
   <Boundary_y>Periodic</Boundary_y>
 </Potts>




<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Cell1" TypeId="1"/>
   
 </Plugin>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>15.0</LambdaVolume>
 </Plugin>

 <Plugin Name="Surface">
   <TargetVolume>20</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin> 


 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Cell1" Type2="Cell1">15</Energy>
   <Energy Type1="Cell1" Type2="Medium">8</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 
 
 <Plugin Name="PolarizationVector"/>

 

 <Plugin Name="CellOrientation">
    <LambdaCellOrientation>5.0</LambdaCellOrientation> 
    <!-- <Algorithm>CenterOfMassBased</Algorithm> -->
 </Plugin>

 
 <Steppable Type="BlobInitializer">
  <Region>
   <Gap>0</Gap>
   <Width>5</Width>
   <Center x="50" y="50" z="0"/>
   <Radius>4</Radius>
   <Types>Cell1</Types>
  </Region>
 </Steppable>








</CompuCell3D>
