<CompuCell3D Revision="20190811" Version="4.0.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="150" y="150" z="1"/>
      <Steps>1000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Type1">10.0</Energy>
      <Energy Type1="Type1" Type2="Type1">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="75" y="75" z="0"/>
         <Radius>30</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
