<CompuCell3D Revision="20190811" Version="4.0.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="50" y="50" z="1"/>
      <Steps>10000000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
      <CellType TypeId="2" TypeName="Type2"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="Type2" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Type1">6.0</Energy>
      <Energy Type1="Medium" Type2="Type2">6.0</Energy>
      <Energy Type1="Type1" Type2="Type1">16.0</Energy>
      <Energy Type1="Type1" Type2="Type2">16.0</Energy>
      <Energy Type1="Type2" Type2="Type2">16.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
    </Plugin>
    
    
    
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Field1">
            <ChemotaxisByType ChemotactTowards="Medium" Lambda="10" SaturationCoef="1e-5" Type="Type1"/>
        </ChemicalField>
        <ChemicalField Name="Field2">
            <ChemotaxisByType ChemotactTowards="Medium" Lambda="10" SaturationCoef="1e-5" Type="Type2"/>
        </ChemicalField>
    </Plugin>

    
   <Steppable Type="FastDiffusionSolver2DFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Field1">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>Field1</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="Field2">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>Field2</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="15" y="25" z="0"/>
         <Radius>4</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type1</Types>
      </Region>
      <Region>
         <Center x="35" y="25" z="0"/>
         <Radius>4</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type2</Types>
      </Region>
   </Steppable>
</CompuCell3D>
