<CompuCell3D Revision="20170123" Version="3.7.5">
   
   <Potts>
            
      <Dimensions x="100" y="100" z="1"/>
      <Steps>2000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="NeighborTracker"/>
   
   <Plugin Name="ExternalPotential">
      
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass"/>
   
   <Plugin Name="Contact">

      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">16.0</Energy>
      <Energy Type1="Medium" Type2="B">16.0</Energy>
      <Energy Type1="A" Type2="A">2.0</Energy>
      <Energy Type1="A" Type2="B">11.0</Energy>
      <Energy Type1="B" Type2="B">15.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   

</CompuCell3D>
