 <CompuCell3D>
  <Metadata>    
    <VirtualProcessingUnits ThreadsPerVPU="1">4</VirtualProcessingUnits>
<!--     <DebugOutputFrequency>100</DebugOutputFrequency>      -->
 </Metadata> 
 
 <Potts>
   <Dimensions x="200" y="200" z="1"/>
   <Anneal>10</Anneal>
   <Steps>1000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>


 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>
 
<Steppable Type="DiffusionSolverFE">
   
   <!-- Specification of PDE solvers -->
   <DiffusionField>
      <DiffusionData>
         <FieldName>FGF</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <InitialConcentrationExpression>x*y</InitialConcentrationExpression>
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
         <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
         <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
         <!-- <DeltaX>1.0</DeltaX> -->
         <!-- <DeltaT>1.0</DeltaT> -->
      </DiffusionData>
   </DiffusionField>
</Steppable>

<Steppable Type="BlobInitializer">   
   <Region>
      <Center x="100" y="100" z="0"/>
      <Radius>80</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Condensing,NonCondensing</Types>
   </Region>
</Steppable>

</CompuCell3D>
