 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Steps>20000</Steps>
   <Temperature>10</Temperature>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

 <Metadata>
   <!-- Basic properties simulation -->
   <NumberOfProcessors>2</NumberOfProcessors>
   <DebugOutputFrequency>100</DebugOutputFrequency>
   <!-- <NonParallelModule Name="Potts"/> -->
</Metadata>

 
 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

 <Plugin Name="SurfaceTracker"/>
 

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Plugin Name="CenterOfMass"/>


<Steppable Type="BlobInitializer">
   
   <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
   <Region>
      <Center x="50" y="50" z="0"/>
      <Radius>40</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Condensing,NonCondensing</Types>
   </Region>
</Steppable>

</CompuCell3D>
