<CompuCell3D >
   
   <Potts>

      <Dimensions x="100" y="100" z="1"/>
      <Steps>1000</Steps>
      <Temperature id="temp">10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Condensing"/>
      <CellType TypeId="2" TypeName="NonCondensing"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters id="vol_cond" CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="NonCondensing" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>

   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Condensing">10.0</Energy>
      <Energy Type1="Medium" Type2="NonCondensing">10.0</Energy>
      <Energy Type1="Condensing" Type2="Condensing">10.0</Energy>
      <Energy Type1="Condensing" Type2="NonCondensing">10.0</Energy>
      <Energy Type1="NonCondensing" Type2="NonCondensing">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>

   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Condensing,NonCondensing</Types>
      </Region>
   </Steppable>


</CompuCell3D>
