<CompuCell3D>
    <Potts>
        <Dimensions x="55" y="55" z="1"/>
        <Anneal>0</Anneal>
        <Steps>10000</Steps>
        <Temperature>5</Temperature>
        <Flip2DimRatio>1.0</Flip2DimRatio>
        <Boundary_y>NoFlux</Boundary_y>
    </Potts>


    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Amoeba" TypeId="1"/>
        <CellType TypeName="Bacteria" TypeId="2"/>
    </Plugin>


    <Plugin Name="Volume">
        <LambdaVolume>1.0</LambdaVolume>
        <TargetVolume>25.0</TargetVolume>
    </Plugin>

    <Plugin Name="Surface">
        <LambdaSurface>0.5</LambdaSurface>
        <TargetSurface>20.0</TargetSurface>
    </Plugin>


    <Steppable Type="BoxWatcher">
        <XMargin>1</XMargin>
        <YMargin>1</YMargin>
        <ZMargin>1</ZMargin>
    </Steppable>


    <Steppable Type="FastDiffusionSolver2DFE">

        <!--      <Serialize Frequency="100"/>         -->
        <DiffusionField>
            <DiffusionData>
                <UseBoxWatcher/>
                <FieldName>FGF</FieldName>

                <DiffusionConstant>0.010</DiffusionConstant>
                <DecayConstant>0.000</DecayConstant>
                <ConcentrationFileName>Simulation/diffusion_2D_fast_box.pulse.txt</ConcentrationFileName>
            </DiffusionData>
        </DiffusionField>
    </Steppable>


    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="20" y="20" z="0"/>
            <BoxMax x="30" y="30" z="1"/>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Amoeba</Types>
        </Region>
    </Steppable>


</CompuCell3D>
