 <CompuCell3D>
 <Potts>
   <Dimensions x="56" y="56" z="1"/>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Boundary_y>Periodic</Boundary_y>
   <Boundary_x>Periodic</Boundary_x>
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacteria" TypeId="2"/>
 </Plugin>



 <Steppable Type="KernelDiffusionSolver">
<!--      <Serialize Frequency="100"/> -->
     <DiffusionField>
        <Kernel>1</Kernel>
        <CoarseGrainFactor>2</CoarseGrainFactor> 
        <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant>1.0</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
           <ConcentrationFileName>Simulation/diffusion_2D_coarse_grain.pulse.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
<!--            <DeltaT>0.1</DeltaT> -->
<!--            <DeltaX>1.0</DeltaX> -->
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>


</CompuCell3D>
