 <CompuCell3D>
 <Potts>
   <Dimensions x="128" y="128" z="128"/>
   <Anneal>0</Anneal>
   <Steps>100</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>   
<!--    <Boundary_x>Periodic</Boundary_x>
   <Boundary_z>Periodic</Boundary_z> -->
<!--    <LatticeType>Hexagonal</LatticeType> -->
 </Potts>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
 </Plugin>

 <!-- <Steppable Type="DiffusionSolverFE"> -->
 <Steppable Type="ReactionDiffusionSolverFE_OpenCL_Implicit">
  <!--  zero-based GPU device index. -1 stands for automatic GPU device selection. May be omited (default behavior). -->
	<GPUDeviceIndex>0</GPUDeviceIndex>
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
			<DeltaX>0.01</DeltaX>
			<DeltaT>0.01</DeltaT>
			<AdditionalTerm>
				<![CDATA[
					FGF>0.01?(FGF*FGF*0.2+1):0;
				]]>
			</AdditionalTerm>
	    <ConcentrationFileName>Simulation/ReactionDiffusion_OpenCL_3D.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>


</CompuCell3D>
