<!-- Demo type-specific diffusivity and automatic time substepping.
    One should see two diffusion fields that warp due to differences
    in cell type diffusivities. One should also find that without 
    automatic time substepping, a numerical solution is unstable. -->
<CompuCell3D Revision="20190906" Version="4.1.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="50" y="50" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Type1">16.0</Energy>
      <Energy Type1="Type1" Type2="Type1">6.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
    <Steppable Type="ReactionDiffusionSolverFVM">
        <AutoTimeSubStep/>
        <DiffusionField Name="C1">
            <DiffusionData>
                <DiffusionConstant>0.1</DiffusionConstant>
                <DiffusionCoefficient CellType="Type1">0.5</DiffusionCoefficient>
                <DiffusivityByType/>
                <InitialConcentrationExpression>x/50</InitialConcentrationExpression>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="0.0"/>
                    <ConstantValue PlanePosition="Max" Value="1.0"/>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="0.0"/>
                    <ConstantDerivative PlanePosition="Max" Value="0.0"/>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
        <DiffusionField Name="C2">
            <DiffusionData>
                <DiffusionConstant>0.1</DiffusionConstant>
                <DiffusionCoefficient CellType="Type1">0.01</DiffusionCoefficient>
                <DiffusivityByType/>
                <InitialConcentrationExpression>1-x/50</InitialConcentrationExpression>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="1.0"/>
                    <ConstantValue PlanePosition="Max" Value="0.0"/>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="0.0"/>
                    <ConstantDerivative PlanePosition="Max" Value="0.0"/>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
    </Steppable>
   
   <Steppable Type="BlobInitializer">
      <Region>
         <Center x="25" y="25" z="0"/>
         <Radius>10</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
