<CompuCell3D>

    <Potts>
        <Dimensions x="55" y="55" z="1"/>
        <Anneal>0</Anneal>
        <Steps>1000</Steps>
        <Temperature>15</Temperature>
        <Flip2DimRatio>0.0</Flip2DimRatio>
        <Boundary_y>NoFlux</Boundary_y>
    </Potts>


    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Condensing" TypeId="1" Freeze=""/>
        <CellType TypeName="NonCondensing" TypeId="2" Freeze=""/>
    </Plugin>


    <!--  <Steppable Type="DiffusionSolverFE"> -->
    <Steppable Type="SteadyStateDiffusionSolver2D">
        <DiffusionField>
            <ManageSecretionInPython/>
            <DiffusionData>

                <FieldName>FGF</FieldName>
                <DiffusionConstant>1.00</DiffusionConstant>
                <DecayConstant>0.00001</DecayConstant>
                <!--DoNotDecayIn>Medium</DoNotDecayIn-->
                <!--            <DeltaT>0.1</DeltaT> -->
                <!--            <DeltaX>1.0</DeltaX> -->
                <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
            </DiffusionData>
        </DiffusionField>
    </Steppable>


    <Steppable Type="BlobInitializer">
        <Region>
            <Center x="27" y="27" z="0"/>
            <Radius>20</Radius>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Condensing,NonCondensing</Types>
        </Region>
    </Steppable>

</CompuCell3D>
