<CompuCell3D Revision="20200418" Version="4.2.0">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>      
   </Metadata>
   
   <Potts>      
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass"/>
   
   <Plugin Name="Contact">      
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Secretion"/>
      
   
   <Steppable Type="DiffusionSolverFE">      
      <DiffusionField Name="FGF">
         <DiffusionData>
            <FieldName>FGF</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="A">0.1</Secretion>            
         </SecretionData>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">      
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>A,B</Types>
      </Region>
   </Steppable>
</CompuCell3D>
