<CompuCell3D Revision="20200118" Version="4.1.1">
   <Metadata>
      <NumberOfProcessors>8</NumberOfProcessors>
      <DebugOutputFrequency>100000</DebugOutputFrequency>
   </Metadata>

   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>

   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Type1"/>
   </Plugin>

   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Type1" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>

   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Type1">10.0</Energy>
      <Energy Type1="Type1" Type2="Type1">10.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      <FluctuationCompensator/>
      <DiffusionField Name="F1">
         <DiffusionData>
            <FieldName>F1</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <InitialConcentrationExpression>x/100*(1-x/100)*4</InitialConcentrationExpression>
<!--             <InitialConcentrationExpression>0.5</InitialConcentrationExpression>-->
            <DiffusionCoefficient CellType="Type1">0.0</DiffusionCoefficient>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
<!--               <ConstantValue PlanePosition="Min" Value="0.0"/>-->
<!--               <ConstantValue PlanePosition="Max" Value="1.0"/>-->
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
<!--               <ConstantDerivative PlanePosition="Min" Value="0.0"/>-->
<!--               <ConstantDerivative PlanePosition="Max" Value="0.0"/>-->
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>

   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="40" y="40" z="0"/>
         <BoxMax x="60" y="60" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Type1</Types>
      </Region>
   </Steppable>
</CompuCell3D>