 <CompuCell3D>
 <Potts>
   <Dimensions x="55" y="55" z="1"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>1.0</Flip2DimRatio>
   <Boundary_y>NoFlux</Boundary_y>
 </Potts>


 <Plugin Name="Volume">
    <TargetVolume>25</TargetVolume>
    <LambdaVolume>2.0</LambdaVolume>
 </Plugin>
	
	


<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacteria" TypeId="2"/>    
 </Plugin>

<Plugin Name="PDESolverCaller">
    <CallPDE PDESolverName="FlexibleDiffusionSolverFE" ExtraTimesPerMC="8"/>
 </Plugin>



 <Steppable Type="FlexibleDiffusionSolverFE">
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
	    <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
<!--            <DeltaT>0.1</DeltaT> -->
<!--            <DeltaX>1.0</DeltaX> -->
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>


 <Steppable Type="PIFInitializer">
     <PIFName>Simulation/amoebae_2D.piff</PIFName>
  </Steppable>
      


</CompuCell3D>
