 <CompuCell3D>
 <Potts>
   <Dimensions x="56" y="56" z="56"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>   
<!--    <Boundary_x>Periodic</Boundary_x>
   <Boundary_z>Periodic</Boundary_z> -->
   <LatticeType>Hexagonal</LatticeType> 
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacteria" TypeId="2"/>
    <CellType TypeName="Wall" TypeId="2" Freeze=""/>
 </Plugin>



 <Steppable Type="DiffusionSolverFE">
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
            <DiffusionCoefficient CellType="Wall">0.001</DiffusionCoefficient>
            
	       <ConcentrationFileName>Simulation/diffusion_3D_scale_wall.pulse.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>


 <Steppable Type="PIFInitializer">
    <PIFName>Simulation/diffusion_3D_scale_wall.piff</PIFName>
 </Steppable>
 
</CompuCell3D>
