 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>10000</Steps>
   <Temperature>5</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
   <MetropolisAlgorithm>BoundaryWalker</MetropolisAlgorithm>
   <Boundary_x>Periodic</Boundary_x>
 </Potts>

 <Plugin Name="GlobalBoundaryPixelTracker">
    <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>4.0</LambdaVolume>
 </Plugin>


<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Body1" TypeId="1"/>
    <CellType TypeName="Body2" TypeId="2"/>    
    <CellType TypeName="Body3" TypeId="3"/>    
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Body1" Type2="Body1">16</Energy>
   <Energy Type1="Body1" Type2="Medium">4</Energy>
   <Energy Type1="Body2" Type2="Body2">16</Energy>
   <Energy Type1="Body2" Type2="Medium">4</Energy>
   <Energy Type1="Body3" Type2="Body3">16</Energy>
   <Energy Type1="Body3" Type2="Medium">4</Energy>

   <Energy Type1="Body1" Type2="Body2">16</Energy>   
   <Energy Type1="Body1" Type2="Body3">16</Energy>
   <Energy Type1="Body2" Type2="Body3">16</Energy>   

   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Plugin Name="CenterOfMass"/>

 <Plugin Name="ElasticityTracker">
    <IncludeType>Body1</IncludeType>
    <IncludeType>Body2</IncludeType>
    <IncludeType>Body3</IncludeType>
 </Plugin>


 <Plugin Name="ElasticityEnergy">
    <LambdaElasticity>200.0</LambdaElasticity>
    <TargetLengthElasticity>6</TargetLengthElasticity>
 </Plugin>


    <Plugin Name="ExternalPotential">
   	<ExternalPotentialParameters CellType="Body1" x="-10" y="0" z="0"/>
      <ExternalPotentialParameters CellType="Body2" x="0" y="0" z="0"/>
      <ExternalPotentialParameters CellType="Body3" x="0" y="0" z="0"/>
    </Plugin>



  <Steppable Type="PIFInitializer">
        <PIFName>Simulation/elasticityTest.piff</PIFName>
  </Steppable>



</CompuCell3D>
