<CompuCell3D version="3.6.0">
   
   <!-- Basic properties of CPM (GGH) algorithm -->
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>20000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <!-- Listing all cell types in the simulation -->
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium" Freeze=""/>
      <CellType TypeId="1" TypeName="Type1" Freeze=""/>      
      <CellType TypeId="2" TypeName="Type2" Freeze=""/>
   </Plugin>
   
   <!-- Constraint on cell volume. Each cell has different constraint - constraints have to be initialized and managed in Python -->
   <Plugin Name="Volume"/>
   
   <!-- Module tracking center of mass of each cell -->
   <Plugin Name="CenterOfMass"/>
   
   <!-- Specification of adhesion energies -->
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10</Energy>
      <Energy Type1="Medium" Type2="Type1">10</Energy>
      <Energy Type1="Medium" Type2="Type2">10</Energy>
      <Energy Type1="Type1" Type2="Type1">2</Energy>
      <Energy Type1="Type2" Type2="Type2">2</Energy>
      <Energy Type1="Type1" Type2="Type2">20</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   <!-- Specification of chemotaxis properties of select cell types. -->
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="Oxygen" Source="FiPySolver">
         <ChemotaxisByType Lambda="0.0" Type="Type1"/>
      </ChemicalField>
   </Plugin>
   
   <!-- Specification of secretion properties of select cell types. -->
   <!-- Specification of secretion properties of individual cells can be done in Python -->
<!--   <Plugin Name="Secretion">
      <Field Name="Oxygen">
         <Secretion Type="Type1">5.2</Secretion>
      </Field>
   </Plugin>-->
   
   <!-- Module allowing multiple calls of the PDE solver. By default number of extra calls is set to 0.  -->
   <!-- Change these settings to desired values after consulting CC3D manual on how to work with large diffusion constants (>0.16 in 3D, >0.25 in 2D with DeltaX=1.0 and DeltaT=1.0) -->
<!--   <Plugin Name="PDESolverCaller">
      <CallPDE ExtraTimesPerMC="0" PDESolverName="FiPySolver"/>
   </Plugin>-->
   
   <!-- Specification of PDE solvers -->
   <Steppable Type="FiPySolver">
      <DiffusionField>
         <DiffusionData>
            <FieldName>Oxygen</FieldName>
<!-- 	    <ConcentrationFileName>Simulation/conc.txt</ConcentrationFileName> -->
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
            <!-- Additional options are: -->
            <DoNotDiffuseTo>Type2</DoNotDiffuseTo>
            <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
            <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
            <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
            <DeltaX>1.0</DeltaX>
            <DeltaT>1.0</DeltaT>
         </DiffusionData>
	<SecretionData>                                                                                                               
	      <SecretionOnContact Type="Type1" SecreteOnContactWith="Medium">0.2</SecretionOnContact>                          
	      <!--SecretionOnContact Type="Medium" SecreteOnContactWith="Amoeba">0.1</SecretionOnContact-->                             
<!-- 	      <Secretion Type="Type1">5.2</Secretion>                                                                                    -->
	  </SecretionData>
      </DiffusionField>
   </Steppable>
 
   
   <!-- Initial layout of cells in the form of rectangular slab -->
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="1" y="1" z="0"/>
         <BoxMax x="5" y="5" z="1"/>
         <Gap>2</Gap>
         <Width>5</Width>
         <Types>Type1</Types>
      </Region>
   
      <Region>
         <BoxMin x="6" y="6" z="0"/>
         <BoxMax x="10" y="10" z="1"/>
         <Gap>2</Gap>
         <Width>5</Width>
         <Types>Type2</Types>
      </Region>
            
    <Region>
         <BoxMin x="30" y="30" z="0"/>
         <BoxMax x="35" y="35" z="1"/>
         <Gap>2</Gap>
         <Width>5</Width>
         <Types>Type1</Types>
      </Region>
      
        <Region>
         <BoxMin x="70" y="70" z="0"/>
         <BoxMax x="75" y="75" z="1"/>
         <Gap>2</Gap>
         <Width>5</Width>
         <Types>Type1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
