<CompuCell3D Revision="20170130" Version="3.7.5">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>200</Steps>
      <RandomSeed>20</RandomSeed>
      <Temperature>{{TEMPERATURE}}</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>


   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>

   <Plugin Name="NeighborTracker"/>

   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">16.0</Energy>
      <Energy Type1="Medium" Type2="B">16.0</Energy>
      <Energy Type1="A" Type2="A">4.0</Energy>
      <Energy Type1="A" Type2="B">{{CONTACT_A_B}}</Energy>
      <Energy Type1="B" Type2="B">11.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>

   <Steppable Type="PIFInitializer">       
        <PIFName>Simulation/init_cell_layout.piff</PIFName>
    </Steppable>
   
</CompuCell3D>
