 <CompuCell3D>
 <Potts>
   <Dimensions x="210" y="84" z="1"/>
   <Steps>10000</Steps>
   <Temperature>500</Temperature>   
   <Boundary_x>Periodic</Boundary_x>
   <NeighborOrder>2</NeighborOrder> 
 </Potts>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Fluid1" TypeId="1"/>
    <CellType TypeName="Fluid2" TypeId="2"/>
    <CellType TypeName="Fluid3" TypeId="3"/>
    <CellType TypeName="Fluid4" TypeId="4"/>
    <CellType TypeName="Wall" TypeId="5" Freeze=""/>
 </Plugin>


<!--  <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Fluid1" Type2="Fluid1">-20</Energy>
   <Energy Type1="Fluid1" Type2="Fluid2">-20</Energy>
   <Energy Type1="Fluid1" Type2="Fluid3">-20</Energy>
   <Energy Type1="Fluid1" Type2="Fluid4">-20</Energy>
   <Energy Type1="Fluid2" Type2="Fluid2">-20</Energy>
   <Energy Type1="Fluid2" Type2="Fluid3">-20</Energy>
   <Energy Type1="Fluid2" Type2="Fluid4">-20</Energy>
   <Energy Type1="Fluid3" Type2="Fluid3">-20</Energy>
   <Energy Type1="Fluid3" Type2="Fluid4">-20</Energy>
   <Energy Type1="Fluid4" Type2="Fluid4">-20</Energy>
   <Energy Type1="Wall" Type2="Wall">-20</Energy>
   <Energy Type1="Wall" Type2="Fluid1">-20</Energy>
   <Energy Type1="Wall" Type2="Fluid2">-20</Energy>
   <Energy Type1="Wall" Type2="Fluid3">-20</Energy>
   <Energy Type1="Wall" Type2="Fluid4">-20</Energy>
   <Energy Type1="Medium" Type2="Wall">0</Energy>
   <Energy Type1="Medium" Type2="Fluid1">0</Energy>
   <Energy Type1="Medium" Type2="Fluid2">0</Energy>
   <Energy Type1="Medium" Type2="Fluid3">0</Energy>
   <Energy Type1="Medium" Type2="Fluid4">0</Energy>
   <NeighborOrder>2</NeighborOrder> 
 </Plugin>    -->

 <Plugin Name="Volume">
   <TargetVolume>49</TargetVolume>
   <LambdaVolume>15</LambdaVolume>
 </Plugin>

 <Plugin Name="Surface">
   <TargetSurface>28</TargetSurface>
   <LambdaSurface>15</LambdaSurface>
 </Plugin>


<!-- <Plugin Name="Connectivity">
    <Penalty>1000000000</Penalty>
 </Plugin>  -->

<Plugin Name="ExternalPotential">
    <Lambda x="-50" y="0.0" z="0.0"/>    
 </Plugin> 

 
 <Plugin Name="Viscosity">
    <LambdaViscosity>100000.0</LambdaViscosity>
 </Plugin>  

 
  <Steppable Type="UniformInitializer">
    <Region>
        <BoxMin x="0" y="0" z="0"/>
        <BoxMax x="210" y="7" z="1"/>
        <Gap>0</Gap>
        <Width>50</Width>
        <Types>Wall</Types>
    </Region>
    
  <Region>
        <BoxMin x="0" y="7" z="0"/>
        <BoxMax x="21" y="77" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid1</Types>
    </Region>    
    
  <Region>
        <BoxMin x="21" y="7" z="0"/>
        <BoxMax x="42" y="77" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid2</Types>
    </Region>    
    
  <Region>
        <BoxMin x="42" y="7" z="0"/>
        <BoxMax x="63" y="77" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid3</Types>
    </Region>    

  <Region>
        <BoxMin x="63" y="7" z="0"/>
        <BoxMax x="210" y="77" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid4</Types>
    </Region>    
    

    <Region>
        <BoxMin x="0" y="77" z="0"/>
        <BoxMax x="210" y="84" z="1"/>
        <Gap>0</Gap>
        <Width>50</Width>
        <Types>Wall</Types>
    </Region>    
    
<!--     <Region>
        <BoxMin x="0" y="7" z="0"/>
        <BoxMax x="210" y="14" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid1</Types>
    </Region>    

    <Region>
        <BoxMin x="0" y="14" z="0"/>
        <BoxMax x="210" y="21" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid2</Types>
    </Region>    
    <Region>
        <BoxMin x="0" y="21" z="0"/>
        <BoxMax x="210" y="28" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid3</Types>
    </Region>    
    
    <Region>
        <BoxMin x="0" y="28" z="0"/>
        <BoxMax x="210" y="35" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid3</Types>
    </Region>    

    <Region>
        <BoxMin x="0" y="35" z="0"/>
        <BoxMax x="210" y="42" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid2</Types>
    </Region>    

    <Region>
        <BoxMin x="0" y="42" z="0"/>
        <BoxMax x="210" y="49" z="1"/>
        <Gap>0</Gap>
        <Width>7</Width>
        <Types>Fluid1</Types>
    </Region>    
 -->        
  </Steppable>
 
<!--  <Steppable Type="PIFInitializer">
    <PIFName>Simulation/viscosity_2D.piff</PIFName>

    </Steppable>
 --> 





</CompuCell3D>
