<CompuCell3D>
    <!-- The Potts section defines paramters that are used in the Metropolis algorithm-->
    <!-- It also defines lattice parameters, flip neighbors and boundary conditions-->
   <PythonScript>Simulation/wetFoamDrainage.py</PythonScript>
   <Potts>
      <Dimensions x="300" y="300" z="1"/>
      <Anneal>0</Anneal>
      <Steps>10000000</Steps>
      <Temperature>5</Temperature>
      <Flip2DimRatio>1.0</Flip2DimRatio>
<!--       <Boundary_y>Periodic</Boundary_y> -->
      <Boundary_x>Periodic</Boundary_x>
      <NeighborOrder>2</NeighborOrder>
   </Potts>

   <!--In Every CompuCell simulation you need to list all the cell types that you will be using-->  
   <!--This is done in the CellType Plugin - as shown below-->  
   <Plugin Name="CellType">
      <CellType TypeName="Medium" TypeId="0"/>
      <CellType TypeName="Air" TypeId="1"/>   
      <CellType TypeName="Water" TypeId="2"/>   
   </Plugin>
   
   <!--Contact Plugin calculates change in contact energy due to spin flip attempt -->  
   <!--You specify contact energies between cell types and how many levels of neighbors (Depth parameter) should be included in energy calculations  -->  
   <!--Depth tells CompuCell the maximum distance - measured in pixels - up to which it should search for neighbors to be included in contact energy calculations-->
   
   <Plugin Name="Contact">
      <Energy Type1="Air" Type2="Air">10</Energy>
      <Energy Type1="Water" Type2="Water">4</Energy>
      <Energy Type1="Air" Type2="Water">6</Energy>
      <Energy Type1="Medium" Type2="Medium">0</Energy>
      <Energy Type1="Medium" Type2="Air">0</Energy>      
      <Energy Type1="Medium" Type2="Water">0</Energy>      
      <NeighborOrder>3</NeighborOrder>
   </Plugin>

   
   
   <!--Volume plugin puts constraint on cell volume. You also need to include it when you want CompuCell to update volume of cells-->
   <!--The stronget LambdaVolume therestrictive constraint -->
   <!--Below LambdaVolume=0 which means ther is no constraint. However we use this plugin to get up-to-date volume information for every cell-->
   
   
<!--    <Plugin Name="VolumeFlex">
      <VolumeEnergyParameters CellType="Air" TargetVolume="100" LambdaVolume="0" />
      <VolumeEnergyParameters CellType="Water" TargetVolume="4" LambdaVolume="10" />
   </Plugin> -->
    
    <Plugin Name="VolumeLocalFlex"/>

    <Plugin Name="ExternalPotential">
        <ExternalPotentialParameters CellType="Water" x="0" y="0" z="0"/>
    </Plugin>    

</CompuCell3D>
