 <CompuCell3D>

 <Potts>
   <Dimensions x="55" y="55" z="10"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature id="temp">15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>
   <Boundary_y>NoFlux</Boundary_y>
   <!-- <LatticeType>Hexagonal</LatticeType> -->
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"  Freeze=""/>
    <CellType TypeName="NonCondensing" TypeId="2" Freeze=""/>
 </Plugin>


   <Plugin Name="Volume">
      <VolumeEnergyParameters id="vol_cond" CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="NonCondensing" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>


 <Steppable Type="DiffusionSolverFE">
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant id="fgf_diff_constant">0.010</DiffusionConstant>
            <DecayConstant id="fgf_decay_constant">0.000</DecayConstant>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
<!--            <DeltaT>0.1</DeltaT> -->
<!--            <DeltaX>1.0</DeltaX> -->
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>

 
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="50" y="50" z="5"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Condensing,NonCondensing</Types>
      </Region>
   </Steppable>
 <!-- <Steppable Type="BlobInitializer">   
   <Region>
      <Center x="27" y="27" z="0"/>
      <Radius>20</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Condensing,NonCondensing</Types>
   </Region>
</Steppable> -->

</CompuCell3D>
