 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>1000</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

-  <Plugin Name="VolumeLocalFlex"/>


 <Plugin Name="Surface">
   <TargetSurface>40</TargetSurface>
   <LambdaSurface>1.5</LambdaSurface>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
    <CellType TypeName="Frozen" TypeId="3" Freeze=""/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   <Energy Type1="Frozen"    Type2="Frozen">16</Energy>
   <Energy Type1="Frozen"    Type2="Condensing">16</Energy>
   <Energy Type1="Frozen"    Type2="NonCondensing">16</Energy>
   <Energy Type1="Frozen"    Type2="Medium">16</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Plugin Name="LengthConstraint">
    <LengthEnergyParameters CellType="Condensing" TargetLength="20" LambdaLength="5" />
    <LengthEnergyParameters CellType="NonCondensing" TargetLength="20" LambdaLength="5" />
 </Plugin>



 <Plugin Name="Connectivity">
    <Penalty>1000000000</Penalty>
 </Plugin>
 
 
 <Steppable Type="PIFInitializer">
    <PIFName>examples_PythonTutorial/growingcells_fast/growingcells_directional.piff</PIFName>
 </Steppable>

</CompuCell3D>
