<CompuCell3D>
    <Potts>
        <Dimensions x="50" y="50" z="50"/>
        <Steps>10000</Steps>
        <Temperature>50</Temperature>
        <Flip2DimRatio>1</Flip2DimRatio>
        <NeighborOrder>2</NeighborOrder>
        <RandomSeed>1</RandomSeed>
        <TestOutputGenerate/>
    </Potts>

    <Plugin Name="Volume">
        <TargetVolume>270</TargetVolume>
        <LambdaVolume>5.0</LambdaVolume>
    </Plugin>

    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Body1" TypeId="1"/>
        <CellType TypeName="Body2" TypeId="2"/>
        <CellType TypeName="Body3" TypeId="3"/>
    </Plugin>

    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">0</Energy>
        <Energy Type1="Body1" Type2="Body1">16</Energy>
        <Energy Type1="Body1" Type2="Medium">30</Energy>
        <Energy Type1="Body2" Type2="Body2">16</Energy>
        <Energy Type1="Body2" Type2="Medium">30</Energy>
        <Energy Type1="Body3" Type2="Body3">16</Energy>
        <Energy Type1="Body3" Type2="Medium">30</Energy>

        <Energy Type1="Body1" Type2="Body2">16</Energy>
        <Energy Type1="Body1" Type2="Body3">16</Energy>
        <Energy Type1="Body2" Type2="Body3">16</Energy>

        <NeighborOrder>2</NeighborOrder>
    </Plugin>

    <Plugin Name="CenterOfMass"/>


    <Plugin Name="LengthConstraint">
        <LengthEnergyParameters CellType="Body1" TargetLength="20" MinorTargetLength="5" LambdaLength="100"/>
    </Plugin>

    <Plugin Name="ConnectivityGlobal">
        <FastAlgorithm/>
        <ConnectivityOn Type="Body1"/>
        <ConnectivityOn Type="Body2"/>
        <ConnectivityOn Type="Body3"/>
    </Plugin>


    <Steppable Type="PIFInitializer">
        <PIFName>Simulation/elongationTest3D.piff</PIFName>
    </Steppable>

</CompuCell3D>
