<CompuCell3D version="3.6.2">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="150" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Epith"/>
      <CellType TypeId="2" TypeName="Fib"/>
      <CellType TypeId="3" TypeName="Mes"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Epith">16.0</Energy>
      <Energy Type1="Medium" Type2="Fib">16.0</Energy>
      <Energy Type1="Medium" Type2="Mes">2.0</Energy>
      <Energy Type1="Epith" Type2="Epith">2.0</Energy>
      <Energy Type1="Epith" Type2="Fib">16.0</Energy>
      <Energy Type1="Epith" Type2="Mes">16.0</Energy>
      <Energy Type1="Fib" Type2="Fib">16.0</Energy>
      <Energy Type1="Fib" Type2="Mes">16.0</Energy>
      <Energy Type1="Mes" Type2="Mes">16.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField>
         <DiffusionData>
            <FieldName>Wnt</FieldName>
            <GlobalDiffusionConstant>0.2</GlobalDiffusionConstant>
            <GlobalDecayConstant>5e-05</GlobalDecayConstant>
         </DiffusionData>
         
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticly to account for extra calls of the solver when handling large diffusion constants -->          
            <!-- Uniform secretion Definition -->
            <Secretion Type="Fib">0.5</Secretion>
         </SecretionData>
         
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
         
      </DiffusionField>
   </Steppable>
   
   
   <Steppable Type="UniformInitializer">     
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="100" y="50" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>Epith</Types>
      </Region>
      
       <Region>
         <BoxMin x="50" y="80" z="0"/>
         <BoxMax x="100" y="90" z="1"/>
         <Gap>60</Gap>
         <Width>5</Width>
         <Types>Fib</Types>
      </Region>
      
   </Steppable>
</CompuCell3D>
