 <CompuCell3D>
 <Potts>
   <Dimensions x="100" y="100" z="1"/>
   <Anneal>10</Anneal>
   <Steps>100</Steps>
   <Temperature>10</Temperature>
   <Flip2DimRatio>1</Flip2DimRatio>
   <NeighborOrder>2</NeighborOrder>
 </Potts>

 <Plugin Name="PlayerSettings">
    <!-- You can switch between 2D and 3D initial views by commenting/uncommenting Project2D or View3D elements-->
    <!-- <Project2D XZProj="30"/>  -->
    <View3D>
      <CameraClippingRange Max="388.363853764" Min="182.272762471"/>
      <CameraFocalPoint x="50.0" y="50.0" z="0.75"/>
      <CameraPosition x="150.062764552" y="-88.9777652942" z="213.639720537"/>
      <CameraViewUp x="0.112255891114" y="0.855400655565" z="0.505656339196"/>  
    </View3D> 
    <Concentration LegendEnable="true" NumberOfLegendBoxes="3"/>
    <VisualControl ScreenshotFrequency="200" ScreenUpdateFrequency="10" NoOutput="true" ClosePlayerAfterSimulationDone="true" />
    <Border BorderColor="#ff0000" BorderOn="false"/>    <!-- <Border BorderColor="red" BorderOn="false"/> -->
    <TypesInvisibleIn3D Types="0,2,4,5"/>
    <Cell Type="1" Color="#ff0000"/>    <!-- <Cell Type="1" Color="red"/> -->
    <Cell Type="2" Color="#ffff00"/>     <!-- <Cell Type="2" Color="yellow"/> -->
    <!-- Note: SaveSettings flag is unimportant for the new Player because whenever settings are changed from XML script they are written by default to disk
    This seems to be default behavior of most modern applications. We may implement this feature later
    <Settings SaveSettings="false"/>
    -->
 </Plugin>
 
 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>2.0</LambdaVolume>
 </Plugin>

<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Condensing" TypeId="1"/>
    <CellType TypeName="NonCondensing" TypeId="2"/>
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="NonCondensing" Type2="NonCondensing">16</Energy>
   <Energy Type1="Condensing"    Type2="Condensing">2</Energy>
   <Energy Type1="NonCondensing" Type2="Condensing">11</Energy>
   <Energy Type1="NonCondensing" Type2="Medium">16</Energy>
   <Energy Type1="Condensing"    Type2="Medium">16</Energy>
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Steppable Type="BlobInitializer">
   <Gap>0</Gap>
   <Width>5</Width>
   <CellSortInit>yes</CellSortInit>   
   <Radius>40</Radius>
 </Steppable>

</CompuCell3D>
