 <CompuCell3D>
 <Potts>
   <Dimensions x="55" y="55" z="1"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>
<!--    <Boundary_x>Periodic</Boundary_x>
   <Boundary_y>Periodic</Boundary_y>    -->
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacteria" TypeId="2"/>
 </Plugin>



 <Steppable Type="FastDiffusionSolver2DFE">
<!--       <Serialize Frequency="100"/> -->
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
            <ExtraTimesPerMCS>10</ExtraTimesPerMCS>
            <InitialConcentrationExpression>x*y</InitialConcentrationExpression> 
	    <!-- <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName>  -->
 
        </DiffusionData>

        <BoundaryConditions>
             
            <Plane Axis="X"> 
                 <!-- <Periodic/>   -->
                <ConstantValue PlanePosition="Min" Value="10.0"/>
                <ConstantValue PlanePosition="Max"  Value="10.0"/> 

<!--                 <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                <ConstantDerivative PlanePosition="Max"  Value="10.0"/>      -->            
                
            </Plane>
        
            
            <Plane Axis="Y">                                
                <!-- <Periodic/> -->
                <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                <ConstantDerivative PlanePosition="Max"  Value="10.0"/> 
            </Plane>
            
        </BoundaryConditions>

        
    </DiffusionField>
    
<!--      <DiffusionField>
        <DiffusionData>
            <FieldName>FGF_8</FieldName>
            
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
            <ExtraTimesPerMCS>10</ExtraTimesPerMCS>
           <InitialConcentrationExpression>sin(x*y)</InitialConcentrationExpression> 
	    <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName> 
        </DiffusionData>
    </DiffusionField>
 -->    
 </Steppable>


</CompuCell3D>
