 <CompuCell3D>
 <Potts>
   <Dimensions x="56" y="56" z="1"/>
   <Anneal>0</Anneal>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>   
<!--    <Boundary_x>Periodic</Boundary_x>
   <Boundary_z>Periodic</Boundary_z> -->
   <!-- <LatticeType>Hexagonal</LatticeType>  -->
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacteria" TypeId="2"/>
 </Plugin>



 <Steppable Type="DiffusionSolverFE">
     <DiffusionField>
        <DiffusionData>
            <FieldName>FGF</FieldName>
            
            <DiffusionConstant>1.05</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
	    <ConcentrationFileName>Demos/diffusion/diffusion_2D.pulse.txt</ConcentrationFileName>
	    <!--DoNotDecayIn>Medium</DoNotDecayIn-->		
            <!--<DoNotDiffuseTo>Amoeba</DoNotDiffuseTo> -->
        </DiffusionData>
    </DiffusionField>
 </Steppable>


</CompuCell3D>
