 <CompuCell3D>
 <Potts>
   <Dimensions x="280" y="280" z="280"/>
   <Steps>1000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>1.0</Flip2DimRatio>
<!--    <Boundary_y>Periodic</Boundary_y>
   <Boundary_x>Periodic</Boundary_x>
   <Boundary_z>Periodic</Boundary_z>
 -->
 </Potts>



 <Plugin Name="Volume">
   <TargetVolume>25</TargetVolume>
   <LambdaVolume>4.0</LambdaVolume>
 </Plugin>


<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Body1" TypeId="1"/>
    <CellType TypeName="Body2" TypeId="2"/>    
    <CellType TypeName="Body3" TypeId="3"/>    
 </Plugin>

 <Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">0</Energy>
   <Energy Type1="Body1" Type2="Body1">16</Energy>
   <Energy Type1="Body1" Type2="Medium">4</Energy>
   <Energy Type1="Body2" Type2="Body2">16</Energy>
   <Energy Type1="Body2" Type2="Medium">4</Energy>
   <Energy Type1="Body3" Type2="Body3">16</Energy>
   <Energy Type1="Body3" Type2="Medium">4</Energy>

   <Energy Type1="Body1" Type2="Body2">16</Energy>   
   <Energy Type1="Body1" Type2="Body3">16</Energy>
   <Energy Type1="Body2" Type2="Body3">16</Energy>   
   
   <NeighborOrder>2</NeighborOrder>
 </Plugin>

 <Plugin Name="CenterOfMass"/>

 <Plugin Name="ElasticityTracker">
    <IncludeType>Body1</IncludeType>
    <IncludeType>Body2</IncludeType>
    <IncludeType>Body3</IncludeType>
 </Plugin>


 <Plugin Name="ElasticityEnergy">
    <LambdaElasticity>200.0</LambdaElasticity>
    <TargetLengthElasticity>6</TargetLengthElasticity>
 </Plugin>


    <Plugin Name="ExternalPotential">
   	<ExternalPotentialParameters CellType="Body1" x="-10" y="0" z="0"/>
      <ExternalPotentialParameters CellType="Body2" x="0" y="0" z="0"/>
      <ExternalPotentialParameters CellType="Body3" x="0" y="0" z="0"/>
    </Plugin>



 <Steppable Type="PIFInitializer">
        <PIFName>Simulation/elasticityTest.piff</PIFName>
  </Steppable>




<Steppable Type="SteadyStateDiffusionSolver">
     <DiffusionField>
        <DiffusionData>
            <FieldName>INIT</FieldName>
            <DiffusionConstant>1.0</DiffusionConstant>
            <DecayConstant>0.01</DecayConstant>
        </DiffusionData>
<!--         <SecretionData>
            <Secretion Type="Body1">1.0</Secretion>
            <Secretion Type="Body2">-1.0</Secretion>
        </SecretionData> -->
        <BoundaryConditions>
             
            <Plane Axis="X">                 
                 <Periodic/> 
                 <!--
                <ConstantValue PlanePosition="Min" Value="20.0"/>
                <ConstantValue PlanePosition="Max"  Value="20.0"/>
                -->
            </Plane>
        
            
            <Plane Axis="Y">                                
                <ConstantValue PlanePosition="Min" Value="10.0"/>
                <ConstantValue PlanePosition="Max"  Value="10.0"/>
            </Plane>
            
            <Plane Axis="Z">                                
                <ConstantDerivative PlanePosition="Min" Value="1.0"/>
                <ConstantDerivative PlanePosition="Max"  Value="1.0"/>
            </Plane>            
            
        </BoundaryConditions>
    </DiffusionField>
    
 </Steppable>

</CompuCell3D>
