 <CompuCell3D>
 <PythonScript>Simulation/diffusion_2D_steering.py</PythonScript>
 <Potts>
   <Dimensions x="55" y="55" z="1"/>
   <Anneal>0</Anneal>
   <Steps>3000</Steps>
   <Temperature>15</Temperature>
   <Flip2DimRatio>0.0</Flip2DimRatio>
   <Boundary_y>NoFlux</Boundary_y>
 </Potts>



<Plugin Name="CellType">
    <CellType TypeName="Medium" TypeId="0"/>
    <CellType TypeName="Amoeba" TypeId="1"/>
    <CellType TypeName="Bacterium" TypeId="2" Freeze=""/>
 </Plugin>



 <Steppable Type="FlexibleDiffusionSolverFE">
<!--       <Serialize Frequency="100"/> -->
     <DiffusionField>
         <DiffusionData>
            <FieldName>FGF</FieldName>
            <DiffusionConstant>0.010</DiffusionConstant>
            <DecayConstant>0.000</DecayConstant>
            <!-- <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName> -->
         </DiffusionData>
         <SecretionData>
            <Secretion Type="Bacterium">2</Secretion>
        </SecretionData>        
    </DiffusionField>
 </Steppable>

 <Steppable Type="UniformInitializer">
      <Region>
       <BoxMin x="20" y="20" z="0"/>
        <BoxMax x="25" y="25" z="1"/>
         <Gap>0</Gap>
          <Width>5</Width>
         <Types>Bacterium</Types>
       </Region>
 </Steppable>

</CompuCell3D>
