<CompuCell3D>
    <Potts>
        <Dimensions x="50" y="50" z="1"/>
        <Steps>100000</Steps>
        <Temperature>7</Temperature>
        <Flip2DimRatio>1</Flip2DimRatio>
        <NeighborOrder>1</NeighborOrder>
        <RandomSeed>1</RandomSeed>
        <TestOutputGenerate/>
    </Potts>


    <Plugin Name="Volume">
        <TargetVolume>36</TargetVolume>
        <LambdaVolume>4.0</LambdaVolume>
    </Plugin>

    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Condensing" TypeId="1"/>
        <CellType TypeName="NonCondensing" TypeId="2"/>
    </Plugin>

    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">0</Energy>
        <Energy Type1="NonCondensing" Type2="NonCondensing">30</Energy>
        <Energy Type1="Condensing" Type2="Condensing">30</Energy>
        <Energy Type1="NonCondensing" Type2="Condensing">30</Energy>
        <Energy Type1="NonCondensing" Type2="Medium">32</Energy>
        <Energy Type1="Condensing" Type2="Medium">32</Energy>
        <NeighborOrder>2</NeighborOrder>
    </Plugin>

    <Plugin Name="LengthConstraint">
        <LengthEnergyParameters CellType="Condensing" TargetLength="10" LambdaLength="10"/>
        <LengthEnergyParameters CellType="NonCondensing" TargetLength="10" LambdaLength="10"/>
    </Plugin>

    <Plugin Name="ConvergentExtension">
        <Alpha Type="Condensing">0.99</Alpha>
        <Alpha Type="NonCondensing">0.99</Alpha>
        <NeighborOrder>2</NeighborOrder>
    </Plugin>


    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="10" y="10" z="0"/>
            <BoxMax x="40" y="40" z="1"/>
            <Gap>0</Gap>
            <Width>6</Width>
            <Types>Condensing</Types>
        </Region>
    </Steppable>

</CompuCell3D>
