<CompuCell3D>
    <Potts>
        <Dimensions x="55" y="55" z="1"/>
        <Steps>1000</Steps>
        <Temperature>15</Temperature>
        <Flip2DimRatio>1.0</Flip2DimRatio>
        <Boundary_y>Periodic</Boundary_y>
        <RandomSeed>1</RandomSeed>
        <TestOutputGenerate/>
    </Potts>

    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Amoeba" TypeId="1"/>
        <CellType TypeName="Bacteria" TypeId="2"/>
    </Plugin>


    <Plugin Name="Volume">
        <TargetVolume>25</TargetVolume>
        <LambdaVolume>15.0</LambdaVolume>
    </Plugin>

    <Plugin Name="Surface">
        <TargetSurface>25</TargetSurface>
        <LambdaSurface>2.0</LambdaSurface>
    </Plugin>


    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">0</Energy>
        <Energy Type1="Amoeba" Type2="Amoeba">15</Energy>
        <Energy Type1="Amoeba" Type2="Medium">8</Energy>
        <Energy Type1="Bacteria" Type2="Bacteria">15</Energy>
        <Energy Type1="Bacteria" Type2="Amoeba">15</Energy>
        <Energy Type1="Bacteria" Type2="Medium">8</Energy>
        <Depth>2</Depth>
    </Plugin>


    <Plugin Name="Chemotaxis">
        <ChemicalField Name="FGF">
            <ChemotaxisByType Type="Amoeba" Lambda="0"/>
            <ChemotaxisByType Type="Bacteria" Lambda="2000000" SaturationCoef="1"/>
        </ChemicalField>

    </Plugin>


    <Steppable Type="DiffusionSolverFE">
        <DiffusionField>
            <DiffusionData>
                <FieldName>FGF</FieldName>
                <DiffusionConstant>0.000</DiffusionConstant>
                <DecayConstant>0.000</DecayConstant>
                <ConcentrationFileName>Simulation/amoebaConcentrationField_2D.txt</ConcentrationFileName>
            </DiffusionData>
            <SecretionData>
                <Secretion Type="Amoeba">20</Secretion>
            </SecretionData>

        </DiffusionField>
    </Steppable>


    <Steppable Type="PIFInitializer">
        <PIFName>Simulation/amoebae_2D.piff</PIFName>
    </Steppable>


</CompuCell3D>
